'CR6 Series
'Created by Short Cut (4.5)

'Declare Variables and Units
Dim AirDewDif
Dim Htr
Public BattV
Public PTemp_C
Public CS65X(6)
Public CS320(4)
Public SlrMJ
Public DewPtC
Public HtrCtrl As Boolean
Public BP_mbar
Public WS_ms
Public WindDir
Public AirTC
Public RH
Public Rain_mm
Public Rain_mm_Today

Alias CS65X(1)=VWC
Alias CS65X(2)=EC
Alias CS65X(3)=T
Alias CS65X(4)=P
Alias CS65X(5)=PA
Alias CS65X(6)=VR
Alias CS320(1)=SlrW
Alias CS320(2)=Raw_mV
Alias CS320(3)=CS320_Temp
Alias CS320(4)=CS320_Angle

Units BattV=Volts
Units PTemp_C=Deg C
Units SlrMJ=MJ/m^2
Units DewPtC=Deg C
Units BP_mbar=mbar
Units WS_ms=meters/second
Units WindDir=degrees
Units AirTC=Deg C
Units RH=%
Units Rain_mm=mm
Units VWC=m^3/m^3
Units EC=dS/m
Units T=Deg C
Units P=unitless
Units PA=nSec
Units VR=unitless
Units SlrW=W/m^2
Units Raw_mV=mV
Units CS320_Temp=Deg C
Units CS320_Angle=degrees

'Define Data Tables
DataTable(Weather_data,True,-1)
  DataInterval(0,60,Min,10)
  CardOut(0,-1)
  Sample(1,BattV,FP2)
  Sample(1,PTemp_C,FP2)
  Average(1,VWC,IEEE4,False)
  Average(1,EC,IEEE4,False)
  Average(1,T,IEEE4,False)
  Average(1,P,IEEE4,False)
  Average(1,PA,IEEE4,False)
  Average(1,VR,IEEE4,False)
  Average(1,SlrW,IEEE4,False)
  Average(1,Raw_mV,IEEE4,False)
  Average(1,CS320_Temp,IEEE4,False)
  Average(1,CS320_Angle,IEEE4,False)
  Totalize(1,SlrMJ,IEEE4,False)
  Average(1,DewPtC,IEEE4,False)
  Average(1,BP_mbar,IEEE4,False)
  Average(1,WS_ms,IEEE4,False)
  Sample(1,WindDir,FP2)
  Average(1,AirTC,IEEE4,False)
  Sample(1,RH,IEEE4)
  Totalize(1,Rain_mm,IEEE4,False)
EndTable

DataTable(Table2,True,-1)
  DataInterval(0,1440,Min,10)
  Minimum(1,BattV,FP2,False,False)
  Sample (1,Rain_mm_Today,FP2)
EndTable

'Main Program
BeginProg
  'Main Scan
  Scan(5,Sec,1,0)
    'Default CR6 Datalogger Battery Voltage measurement 'BattV'
    Battery(BattV)
    'Default CR6 Datalogger Wiring Panel Temperature measurement 'PTemp_C'
    PanelTemp(PTemp_C,60)

    'CS100 Barometric Pressure Sensor measurement 'BP_mbar'
    If TimeIntoInterval(45,60,Min) Then PortSet(U3,1)
    If TimeIntoInterval(0,60,Min) Then
      VoltSe(BP_mbar,1,mV5000,U1,True,0,60,0.2,600)
      PortSet(U3,0)
    EndIf
    '05108-45 Wind Speed & Direction Sensor measurements 'WS_ms' and 'WindDir'
    PulseCount(WS_ms,1,U4,5,1,0.1666,0)
    BrHalf(WindDir,1,mV5000,U5,U2,1,2500,True,20000,60,355,0)
    If WindDir>=355 OR WindDir<0 Then WindDir=0
    'EE181 (constant power) Temperature & Relative Humidity Sensor measurements 'AirTC' and 'RH'
    VoltSe(AirTC,1,mV1000,U6,False,0,60,0.1,-40)
    VoltSe(RH,1,mV1000,U7,False,0,60,0.1,0)
    If RH>100 AND RH<103 Then RH=100
    'TE525/TE525WS Rain Gauge measurement 'Rain_mm'
    PulseCount(Rain_mm,1,U9,1,0,0.254,0)
    Rain_mm_Today = Rain_mm_Today + Rain_mm
    If IfTime (1,1440,Min) Then
      Rain_mm_Today = 0
    EndIf
    'Call Data Tables and Store Data
    CallTable Weather_data
    CallTable Table2
  NextScan
  SlowSequence
  Scan (1,Min,3,0)
    'CS650/CS655 Water Content Reflectometer measurements 'VWC', 'EC', 'T','P', 'PA', and 'VR'
    If TimeIntoInterval(0,1,Hr) Then
      SDI12Recorder(CS65X(),C1,"1","M4!",1,0,-1)
    EndIf
    'CS320 Digital Thermopile Pyranometer (SN>3505) measurements 'SlrW', 'Raw_mV', 'CS320_Temp', and 'CS320_Angle'
    SDI12Recorder(CS320(),C1,"0","M4!",1,0,-1)
    'Calculate total flux
    'The multiplier to calculate total flux was calculated by Short Cut
    'and based on a program execution rate (scan rate) of 15 Minutes.
    'If you change the program execution rate outside of Short Cut with the CRBasic Editor
    'you will need to recalculate this multiplier. See the sensor manual for more details.
    'SlrMJ=SlrW*0.0009 - commented out R1, was on a 15 minute scan
    'corrected formula for a 1 minute scan:
    SlrMJ=SlrW*6E-05
    'CS320 Digital Thermopile Pyranometer heater control
    'Dew point calculation 'DewPtC'
    DewPoint(DewPtC,AirTC,RH)
    'Calculate the difference 'AirDewDif' between the CS320 temperature and dewpoint
    AirDewDif=CS320_Temp-DewPtC
    'If the CS320 temperature or the difference between the CS320 temperature and dew point are less than 2 degrees C, turn the CS320 heater on
    If CS320_Temp < 2 OR AirDewDif < 2 Then HtrCtrl = True
    'If the CS320 temperature and the difference between the CS320 temperature and dew point are greater than 3 degrees C, turn the CS320 heater off
    If CS320_Temp > 3 AND AirDewDif > 3 Then HtrCtrl = False
    'Always turn the CS320 heater off if the datalogger battery voltage is less than 11.7 volts
    If BattV < 11.7 Then HtrCtrl = False
    'Issue the appropriate SDI-12 command to turn the CS320 heater on or off depending on the state of the 'HtrCtrl' variable
    If HtrCtrl = True Then
      SDI12Recorder(Htr,C1,"0","XHON!",1,0)
    Else
      SDI12Recorder(Htr,C1,"0","XHOFF!",1,0)
    EndIf

  NextScan
EndProg
